PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['online ID'],'APS', expInfo['Session'], expName, expInfo['date'])
  Experiment info = {'online ID': '', 'MR ID': '', 'Session': 'OBJ/LOC', 'Stimuli Table': '0'}
  Full-screen window = True
  Monitor = NLL LCD
  Screen = 2
  Show mouse = True
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = $[0.114,0.310,0.380]
  expName = miniTRK
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Routines
  Routine filler_task
    CodeComponent exp_info_math
      Code Type = Auto->JS
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      Begin Routine:
        cprint('on Screen: Math Exercise', 'blue')
      End Routine:
        if filler_task_resp.keys==correct:
            cprint('Correct response', 'green')
        else:
            print('Incorrect response')
    CodeComponent select_math_problem
      Code Type = Auto->JS
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      Begin Experiment:
        problem1 = '14 + 26 = ?'
        solution1 = 'Bal mutatóujj: 48                Jobb mutatóujj: 40'
        correct1= 'b'

        problem2 = '3 * 15 = ?'
        solution2 = 'Bal mutatóujj: 74                Jobb mutatóujj: 45'
        correct2= 'b'

        problem3 = '120 / 10 = ?'
        solution3 = 'Bal mutatóujj: 12                Jobb mutatóujj: 16'
        correct3= 'c'

        problem4 = '21 + 15 = ?'
        solution4 = 'Bal mutatóujj: 42                Jobb mutatóujj: 36'
        correct4= 'c'

        problem5 = '6 * 8 = ?'
        solution5 = 'Bal mutatóujj: 48\t\t\tJobb mutatóujj: 38'
        correct5= 'b'

        problem6 = '105 / 5 = ?'
        solution6 = 'Bal mutatóujj: 21                Jobb mutatóujj: 28'
        correct6= 'c'

        math_problems = [problem1, problem2, problem3, problem4, problem5, problem6]

        math_solutions = [solution1,solution2,solution3,solution4,solution5, solution6]

        math_correct = [correct1,correct2,correct3,correct4,correct5,correct6]


        i = 0
      Begin Routine:
        if session=='OBJ':
            i = run_counter - 1
        elif session=='LOC':
            i = run_counter + 2
        problem = math_problems[i]
        solution = math_solutions[i]
        correct = math_correct[i]
    TextComponent math_problem
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = $problem
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    TextComponent math_solution
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = $solution
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    KeyboardComponent filler_task_resp
      allowedKeys = 'b','c'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      storeCorrect = True
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  Routine enc_trial
    ImageComponent enc_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key
      allowedKeys = 'b', 'c', 'a', 'd'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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    CodeComponent enc_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_stimulus_start_time', stimulus_start_time)
    CodeComponent exp_info_encoding
      Code Type = Auto->JS
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      End Routine:
        response=enc_trial_key.keys
        if response == 'b':
            info_text = '\'Nem marad.\''
        elif response == 'c':
            info_text = '\'Marad.\''
        elif response=='a' or response=='d':
            info_text = 'Invalid!'
        else:
            response='-'
            info_text = '\'Nem adott választ.\''
            enc_missing = enc_missing + 1

        print('Button pressed: {}. Response: {}'.format(response, info_text))
  Routine enc_fx
    CodeComponent name_block_enc
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képválasztás'
        elif TrialType=='LOC':
            block_name='Helyválasztás'
        else:
            block_name='Block Unknown'
    ImageComponent enc_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key
      allowedKeys = 'b', 'c', 'a', 'd'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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    CodeComponent enc_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if enc_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_fx_start_time', fx_start_time)
  Routine start_rec_run
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet.\n\nA feladat folytatáshoz nyomja le a gombot a jobb hüvelykujjával.'

        if run_counter == 4:
            end_run_text = 'Vége a feladatnak. A folytatáshoz nyomja le a gombot a jobb hüvelykujjával.'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent end_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_rec_run_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_trial
    ImageComponent rec_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key
      allowedKeys = 'b', 'c', 'a', 'd'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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    CodeComponent rec_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('rec_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('rec_stimulus_start_time', stimulus_start_time)
    CodeComponent exp_info_rec_trial
      Code Type = Auto->JS
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      End Routine:
        response = rec_trial_key.keys
        if response=='b':
            response_text = 'B - OLD'
            if StimType == 'TARGET':
                hits = hits + 1
        elif response=='c':
            response_text = 'C - NEW'
        elif response == 'a' or response=='d':
            response_text = 'INVALID!'
        else:
            response_text = 'Missing'
            rec_missing = rec_missing + 1

        info_text = 'Stimulus Type: {}. Response: {}'.format(StimType, response_text)
        print(info_text)
  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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  Routine end_practice
    CodeComponent exp_info_end_practice
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On screen: End of practice.', 'blue', 'on_white')
        cprint('Waiting for participant\'s response (d)', 'yellow')
      End Routine:
        cprint('key pressed: '+ end_practice_key.keys, 'green')
        print('Scanner Run loop starting with following parameters:')
    CodeComponent end_practice_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Ez volt a gyakorlás.
      wrapWidth = 0.8
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    KeyboardComponent end_practice_key
      allowedKeys = 'd', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
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    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextComponent coming_up_next_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text [set every repeat] = A feladat következik. A feladat során már nem kap visszajelzést. 
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key_practice.keys
        feedback_text = ''
        if response=='b':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response=='c':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        elif response=='a' or response=='d':
            feedback_text = 'Érvénytelen válasz.\nHasználja a mutatóujját!'
        else:
            feedback_text = 'Nem adott választ.'
        print(feedback_text)
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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    TextComponent enc_practice_feedback_block
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
      units = norm
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = rec_trial_key_practice.keys
        if response=='b':
            feedback = 'Az Ön válasza: Régi'
        elif response=='c':
            feedback = 'Az Ön válasza: Új'
        elif response=='a' or response=='d':
            feedback = 'Érvénytelen. Használja a mutatóujját!'
        else:
            feedback = 'Nem adott választ.'

        feedback_text = correct_response +'\n'+ feedback
        print(feedback_text)
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine end_experiment
    TextComponent end_experiment_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük a részvételt!

        Jegyezze fel az alábbi kódot, amellyel a részvételét igazolja:
    CodeComponent generate_participant_code
      Code Type = Both
      Begin Experiment:
        code = np.random.randint(100000, high=999999)
      Begin JS Experiment:
        code = Math.floor(100000 + Math.random() * 900000)
    TextComponent end_experiment_code
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $code
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    TextComponent end_experiment_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 297.0
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      text:
        A jobb nyíl lenyomásával megjelenik a vizsgálat végét jelző üzenet. Ezt fogadja el az OK gombbal, majd átirányítjuk egy felületre, ahol a kód megadásával igazolni tudja a részvételét.
        Probléma esetén írjon nekünk a terkep@ttk.hu email címen.
    KeyboardComponent end_experiment_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 294.0
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  Routine start_run
    CodeComponent run_counter
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        run_counter = run_counter + 1
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine end_run
    TextComponent end_run_text_comp
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_run_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1200
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    CodeComponent exp_info_end_run
      Code Type = Auto->JS
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      Begin Routine:
        print('\nOn screen: End run. Text:')
        print(end_run_text)
        cprint('Waiting for participant\'s response (d)', 'yellow')
      End Routine:
        cprint('key pressed: '+ end_run_key.keys, 'green')
  Routine encoding_title
    CodeComponent set_task_name
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képválasztás'
        elif TrialType=='LOC':
            block_name='Helyválasztás'
        else:
            block_name='Block Unknown'
    TextComponent encoding_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $block_name
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  Routine recognition_title
    CodeComponent set_task_name_rec
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képfelismerés'
        elif TrialType=='LOC':
            block_name='Helyfelismerés'
        else:
            block_name='Block Unknown'
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
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    CodeComponent exp_info_rec_loop
      Code Type = Auto->JS
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      End Routine:
        print('Recognition practice loop starting with following parameters:')
  Routine practice_block_start
    CodeComponent create_practice_block
      Code Type = Both
      Begin Experiment:
        if session == 'OBJ':
            practice_start = 0
        elif session == 'LOC':
            practice_start = 3
        else:
            print('Invalid session! Will go with OBJ')
            practice_start = 0
        step = 1
      Begin JS Experiment:
        practice_end = 0;
        step = 1;
      Begin Routine:
        practice_end = practice_start + 2
        practice_selection = np.arange(practice_start, practice_end, step)
      End Routine:
        print('Encoding practice loop starting with following parameters:')
    TextComponent practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $task_name
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  Routine init_blocks
    CodeComponent create_rec_block
      Code Type = Auto->JS
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      Begin Experiment:
        if session=='OBJ':
            rec_end = 0;
        elif session=='LOC':
            rec_end = 72;
        else:
            rec_end = 0;
      Begin Routine:
        rec_start = rec_end
        rec_end = rec_start + 36
        rec_selection = np.arange(rec_start,rec_end, step)
    CodeComponent create_enc_block
      Code Type = Auto->JS
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      Begin Experiment:
        if session=='OBJ':
            enc_end = 0;
        elif session=='LOC':
            enc_end = 152;
        else:
            enc_end = 0;
      Begin Routine:
        enc_start = enc_end
        enc_end = enc_start + 76
        enc_selection = np.arange(enc_start, enc_end, step)
  Routine wait_for_last_scan
    CodeComponent prepare_MR_code
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: A vizsgálatvezető előkészíti a scannert', 'blue', 'on_white')
        cprint('Experimenter: Ready for scanning? Hit SPACE or -> to continue.', 'red')
    TextComponent wait_for_last_scan_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = A vizsgálatvezető előkészíti a szkennert.
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    KeyboardComponent wait_for_last_scan_continue
      allowedKeys = 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599
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  Routine start_MR
    CodeComponent start_MR_timer
      Code Type = Auto->JS
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      Begin Experiment:
        trigger_key = 's'
        def get_trigger_time(*args):
            trigger = globalClock.getTime() - args[0]
            thisExp.addData('trigger', trigger)
            thisExp.nextEntry()
      Begin Routine:
        cprint('Experimenter: Waiting for trigger. Start scanning...', 'yellow')
      End Routine:
        trigger_time = globalClock.getTime()
        thisExp.addData('trigger_time', trigger_time)
        if enc_end==0 or enc_end==152:
            event.globalKeys.add(key=trigger_key,
                                                   func=get_trigger_time,
                                                   func_args=[trigger_time])
        cprint('Trigger recieved.', 'green')
    TextComponent start_MR_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text = A vizsgálatvezető indítja a szkennert.
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    KeyboardComponent MR_trigger
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      store = first key
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  Routine experiment_setup
    CodeComponent screen_setup
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    CodeComponent logging_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import os
        os.system('color')
        from termcolor import colored, cprint
        import colorama
        colorama.init()
        win.mouseVisible = False
        cprint('State: Experiment Setup', 'blue', 'on_white')
        print('Mouse disabled on screen. Keep CMD window active!')
      Begin Routine:
        logging.setDefaultClock(globalClock)
    CodeComponent select_files
      Code Type = Both
      Begin Experiment:
        trial_table = expInfo['Stimuli Table']

        enc_table = 'stimuli_tables/encoding_trials_'+ trial_table + '.csv'
        rec_table = 'stimuli_tables/recognition_trials_'+ trial_table + '.csv'
      Begin JS Experiment:
        tables = ["0","1","2"];
        trial_table = tables[Math.floor(Math.random() * tables.length)];

        enc_table = (("stimuli_tables/encoding_trials_" + trial_table) + ".csv");
        rec_table = (("stimuli_tables/recognition_trials_" + trial_table) + ".csv");
    CodeComponent block_names
      Code Type = Auto->JS
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      Begin Experiment:
        session = expInfo['Session']
        if session == 'OBJ':
            task_name='Képszemle'
            block_name_selection=[0, 76]
            print('Session selected: OBJ')
        elif session == 'LOC':
            task_name='Berendezés'
            block_name_selection=[152,228]
            print('Session selected: LOC')
        else:
            block_name_selection=[0,76]
            print('Invalid Session! Will use OBJ.')
    CodeComponent set_instruction_text
      Code Type = Auto->JS
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      Begin Experiment:
        instruction_text = ''
        if session == 'OBJ':
            instruction_text = "A Képválogatás alatt azt döntse el, beválogatja-e a képet a kiállításra.\
                                \n\n\t\tJobb mutatóujj - Igen\n\t\tBal mutatóujj - Nem\
                                \n-----------------------------------------------------------------------\
                                \nA Képfelismerés allatt azt döntse el, látta-e már pontosan ugyanezt a képet a Képválogatás alatt.\
                                \n\n\t\tJobb mutatóujj - Új\
                                \n\t\tBal mutatóujj - Régi"
        elif session == 'LOC':
            instruction_text = "A Helyválasztás alatt azt döntse el, maradhat-e a kép a bemutatott helyen.\
                                \n\n\t\tJobb mutatóujj - Igen\n\t\tBal mutatóujj - Nem\
                                \n-----------------------------------------------------------------------\
                                \nA Helyfelismerés allatt azt döntse el, pontosan ezen a helyen látta-e a képet a Helyválasztás alatt.\
                                \n\n\t\tJobb mutatóujj - Új\n\t\tBal mutatóujj - Régi"
    ImageComponent welcome_image
      image = stimuli/terkepesz.png
      pos = (0, -100)
      size = (309,665)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    TextComponent welcome_text
      color = black
      letterHeight = 50
      pos = (0, 350)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = TérKépÉsz Feladatok
      units = pix
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  Routine enc_fx_practice
    CodeComponent name_enc_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képválogatás'
        elif TrialType=='LOC':
            block_name='Helyválasztás'
        else:
            block_name='Block Unknown'
    ImageComponent enc_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key_practice
      allowedKeys = 'b', 'c', 'a', 'd'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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  Routine enc_trial_practice
    ImageComponent enc_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key_practice
      allowedKeys = 'b', 'c', 'a', 'd'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block_practice
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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  Routine rec_fx
    CodeComponent block_name_rec
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képfelismerés'
        elif TrialType=='LOC':
            block_name='Helyfelismerés'
        else:
            block_name='Block Unknown'
    ImageComponent rec_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key
      allowedKeys = 'b', 'c', 'a', 'd'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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    CodeComponent rec_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if rec_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('rec_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('rec_fx_start_time', fx_start_time)
  Routine rec_fx_practice
    CodeComponent name_rec_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képfelismerés'
        elif TrialType=='LOC':
            block_name='Helyfelismerés'
        else:
            block_name='Block Unknown'
    ImageComponent rec_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key_practice
      allowedKeys = 'b', 'c', 'a', 'd'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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  Routine end_session
    CodeComponent exp_info_end
      Code Type = Auto->JS
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      Begin Routine:
        cprint('\nOn screen: End.', 'blue', 'on_white')
        print('Text: Vége a feladatnak.')
        cprint('Hit SPACE or -> to exit.', 'red')
    TextComponent inter_task_break_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text = Vége a feladatnak.
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    KeyboardComponent inter_task_break_key
      allowedKeys = 'space', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195
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  Routine rec_trial_practice
    ImageComponent rec_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key_practice
      allowedKeys = 'b', 'c', 'a', 'd'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block_practice
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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  Routine encoding_baseline
    CodeComponent name_block_enc_bl
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képválogatás'
        elif TrialType=='LOC':
            block_name='Helyválasztás'
        else:
            block_name='Block Unknown'
    ImageComponent encoding_baseline_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      units = norm
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    TextComponent encoding_baseline_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text [set every repeat] = $block_name
      units = norm
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    TextComponent encoding_baseline_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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    TextComponent baseline_enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = +
      units = norm
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    CodeComponent exp_info_enc_baseline
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: Encoding baseline - Start', 'blue', 'on_white')
        enc_missing = 0
      End Routine:
        print('Encoding loop starting with parameters:')
  Routine recognition_baseline
    CodeComponent name_block_rec_bl
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képfelismerés'
        elif TrialType=='LOC':
            block_name='Helyfelismerés'
        else:
            block_name='Block Unknown'
    ImageComponent recognition_baseline_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      units = norm
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    TextComponent recognition_baseline_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent recognition_baseline_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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    TextComponent baseline_rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = +
      units = norm
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    CodeComponent exp_info_rec_baseline
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: Recognition baseline - Start', 'blue', 'on_white')
        rec_missing = 0
        hits = 0
      End Routine:
        print('Recognition loop starting with parameters:')
  Routine general_instructions
    KeyboardComponent general_instructions_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent general_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A gyakorláshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextComponent general_instructions_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $instruction_text
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    CodeComponent exp_info_instructions
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: General instructions...', 'blue', 'on_white')
        cprint('Waiting for participant\'s response (d)', 'yellow')
      End Routine:
        cprint('key pressed: '+ general_instructions_key.keys, 'green')
  Routine encoding_baseline_end
    ImageComponent encoding_baseline_interior_2
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      units = norm
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    TextComponent encoding_baseline_text_block_2
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text [set every repeat] = $block_name
      units = norm
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    TextComponent encoding_baseline_instructions_text_2
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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    TextComponent baseline_end_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = +
      units = norm
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    CodeComponent exp_info_enc_end
      Code Type = Auto->JS
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      Begin Routine:
        cprint('# missed: {}'.format(enc_missing), 'yellow')
        miss = (enc_missing/76)*100
        cprint('% missed: {}'.format(miss), 'yellow')
        cprint('On Screen: Encoding Baseline - End', 'blue', 'on_white')
  Routine recognition_baseline_end
    ImageComponent recognition_baseline_interior_2
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      units = norm
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    TextComponent recognition_baseline_text_block_2
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent recognition_baseline_instructions_text_2
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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    TextComponent baseline_rec_fx_cross_2
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = +
      units = norm
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    CodeComponent exp_info_rec_baseline_end
      Code Type = Auto->JS
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      Begin Routine:
        cprint('# missed: {}'.format(rec_missing), 'yellow')
        miss = (rec_missing/36)*100
        cprint('% missed: {}'.format(miss), 'yellow')
        cprint('# hits: {}'.format(hits), 'yellow')
        hr = (hits/12)*100
        cprint('hit rate: {}'.format(hr), 'yellow')
        cprint('\n On Screen: Recognition Baseline - End', 'blue', 'on_white')
  Routine wait_for_last_scan_rec
    TextComponent wait_for_last_scan_text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
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      text:
        Szünet...

        A vizsgálatvezető előkészíti a szkennert.
    KeyboardComponent wait_for_last_scan_continue_2
      allowedKeys = 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599
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    CodeComponent prepare_MR_code_2
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: A vizsgálatvezető előkészíti a scannert', 'blue')
        cprint('Experimenter: Ready for scanning? Hit SPACE or -> to continue.', 'red')
  Routine start_MR_rec
    CodeComponent start_MR_timer_2
      Code Type = Auto->JS
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      Begin Routine:
        cprint('Experimenter: Waiting for trigger. Start scanning...', 'yellow')
      End Routine:
        trigger_time = globalClock.getTime()
        thisExp.addData('trigger_time', trigger_time)
        cprint('Trigger recieved.', 'green')
    TextComponent start_MR_text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text = A vizsgálatvezető indítja a szkennert.
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    KeyboardComponent MR_trigger_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      store = first key
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Flow
  Routine experiment_setup
  Routine general_instructions
  Routine start_practice
  Routine practice_block_start
  LoopInitiator enc_full_practice loopType="TrialHandler"
    Selected rows = $practice_selection
    conditionsFile = stimuli_tables/encoding_full_practice_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170a.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/172a.jpg'), ('CurrentX', -0.390625), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', 0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lure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
    Routine enc_fx_practice
    Routine enc_trial_practice
    Routine enc_practice_feedback
  LoopTerminator enc_full_practice
  Routine recognition_title
  LoopInitiator rec_full_practice loopType="TrialHandler"
    Selected rows = $practice_selection
    conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.078125), ('Ycoordinate_lure1', -0.41666666700000005), ('Xcoordinate_lure2', 0.234375), ('Ycoordina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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/178a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.41666666700000005), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/179c.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.390625), ('Ycoordinate_lure1', -0.13888888900000002), ('Xcoordinate_lure2', -0.234375), ('Ycoordin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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/180a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', -0.078125), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', -0.078125), ('Ycoordinat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
    Routine rec_fx_practice
    Routine rec_trial_practice
    Routine rec_practice_feedback
  LoopTerminator rec_full_practice
  Routine end_practice
  LoopInitiator run loopType="TrialHandler"
    Selected rows = $block_name_selection
    conditionsFile = $enc_table
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine wait_for_last_scan
    Routine start_MR
    Routine start_run
    Routine encoding_title
    Routine init_blocks
    Routine encoding_baseline
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $enc_selection
      conditionsFile = $enc_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    Routine encoding_baseline_end
    Routine filler_task
    Routine wait_for_last_scan_rec
    Routine start_MR_rec
    Routine start_rec_run
    Routine recognition_title
    Routine recognition_baseline
    LoopInitiator rec_trials loopType="TrialHandler"
      Selected rows = $rec_selection
      conditionsFile = $rec_table
      loopType = sequential
      nReps = 1
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      Routine rec_fx
      Routine rec_trial
    LoopTerminator rec_trials
    Routine recognition_baseline_end
    Routine end_run
  LoopTerminator run
  Routine end_session
