PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'PRACTICE', expName, expInfo['date'])
  Experiment info = {'ID': '', 'Session': 'OBJ/LOC'}
  Full-screen window = True
  Monitor = NLL LCD
  Screen = 1
  Show mouse = True
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = $[0.114,0.310,0.380]
  expName = TérKépÉsz
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Routines
  Routine enc_trial
    ImageComponent enc_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key
      allowedKeys = 'b', 'c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [BAL Nyíl - Nem marad]      [JOBB Nyíl - Marad]
      units = norm
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    CodeComponent enc_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_stimulus_start_time', stimulus_start_time)
    CodeComponent exp_info_encoding
      Code Type = Auto->JS
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      End Routine:
        response=enc_trial_key.keys
        if response == 'b':
            info_text = 'Nem marad.'
        elif response == 'c':
            info_text = 'Marad.'
        else:
            response='-'
            info_text = 'Nem adott választ.'
            enc_missing = enc_missing + 1

        print('Button pressed: {}. {}'.format(response, info_text))
  Routine enc_fx
    CodeComponent name_block_enc
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képválasztás'
        elif TrialType=='LOC':
            block_name='Helyválasztás'
        else:
            block_name='Block Unknown'
    ImageComponent enc_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key
      allowedKeys = 'b', 'c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [BAL Nyíl - Nem marad]      [JOBB Nyíl - Marad]
      units = norm
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    CodeComponent enc_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if enc_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_fx_start_time', fx_start_time)
  Routine start_rec_run
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet.\n\nA feladat folytatáshoz nyomja le a gombot a jobb hüvelykujjával.'

        if run_counter == 4:
            end_run_text = 'Vége a feladatnak. A folytatáshoz nyomja le a gombot a jobb hüvelykujjával.'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine rec_trial
    ImageComponent rec_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key
      allowedKeys = 'b','c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [BAL Nyíl - Régi]      [JOBB Nyíl - Új]
      units = norm
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    CodeComponent rec_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('rec_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('rec_stimulus_start_time', stimulus_start_time)
    CodeComponent exp_info_rec_trial
      Code Type = Auto->JS
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      End Routine:
        response = rec_trial_key.keys
        if response == 'b':
            response_text = 'B - OLD'
            if StimType == 'TARGET':
                hits = hits + 1
        elif response == 'c':
            response_text = 'C - NEW'
        else:
            response_text = 'Missing'
            rec_missing = rec_missing + 1

        info_text = 'Stimulus Type: {}. Response: {}'.format(StimType, response_text)
        print(info_text)
  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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  Routine end_practice
    CodeComponent exp_info_end_practice
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On screen: End of practice.', 'blue', 'on_white')
        cprint('Waiting for participant\'s response (d)', 'yellow')
      End Routine:
        cprint('key pressed: '+ end_practice_key.keys, 'green')
        print('Scanner Run loop starting with following parameters:')
    CodeComponent end_practice_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Ez volt a gyakorlás.
      wrapWidth = 0.8
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    KeyboardComponent end_practice_key
      allowedKeys = 'd', 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
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    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
      text = A kilépéshez nyomja le a SPACE-t. 
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key_practice.keys
        feedback_text = ''
        if response == 'left':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response == 'right':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        else:
            feedback_text = 'Nem adott választ.'
        print(feedback_text)
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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    TextComponent enc_practice_feedback_block
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
      units = norm
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  Routine start_rec_practice_block
    CodeComponent start_rec_practice_code
      Code Type = Both
      Begin Experiment:
        rec_practice_block = [0,1,2]
        block_name = "Kép"
        block_counter = 0
      Begin JS Experiment:
        rec_practice_block = [0, 1, 2];
        block_name = "K\u00e9p";
        block_counter = 0;
      Begin JS Routine:
        block_counter = (block_counter + 1);
        if ((block_counter >= 2)) {
            rec_practice_block = [3, 4, 5];
            block_name = "Hely";
        }
      Begin Routine:
        block_counter = block_counter + 1
        if block_counter >= 2:
            rec_practice_block = [3,4,5]
            block_name = "Hely"
    TextComponent rec_practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = ''
        if rec_trial_key_practice.keys == 'left':
            response = 'Az Ön válasza: Régi'

        elif rec_trial_key_practice.keys == 'right':
            response = 'Az Ön válasza: Új'

        feedback_text = correct_response +'\n'+ response
        print(feedback_text)
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine start_run
    CodeComponent run_counter
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        run_counter = run_counter + 1
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine encoding_title
    CodeComponent set_task_name
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képválasztás'
        elif TrialType=='LOC':
            block_name='Helyválasztás'
        else:
            block_name='Block Unknown'
    TextComponent encoding_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $block_name
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  Routine recognition_title
    CodeComponent set_task_name_rec
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képfelismerés'
        elif TrialType=='LOC':
            block_name='Helyfelismerés'
        else:
            block_name='Block Unknown'
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Képfelismerés
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    CodeComponent exp_info_rec_loop
      Code Type = Auto->JS
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      End Routine:
        print('Recognition practice loop starting with following parameters:')
  Routine practice_block_start
    CodeComponent create_practice_block
      Code Type = Both
      Begin Experiment:
        if session == 'OBJ':
            practice_start = 0
        elif session == 'LOC':
            practice_start = 3
        else:
            print('Invalid session! Will go with OBJ')
            practice_start = 0
        step = 1
      Begin JS Experiment:
        practice_end = 0;
        step = 1;
      Begin Routine:
        practice_end = practice_start + 3
        practice_selection = np.arange(practice_start, practice_end, step)
      End Routine:
        print('Encoding practice loop starting with following parameters:')
    TextComponent practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $task_name
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  Routine enc_instructions_4
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        A 'Kép' alfeladat alatt a JOBB MUATÓUJJÁVAL jelölje azokat a képeket, amelyeket beválogat a kiállításra.

        A BAL NyílÁVAL jelölje a képeket, amelyeket nem válogat be a kiállításra.


        A 'Hely' nevű alfeladatban a JOBB MUATÓUJJÁVAL jelölje azokat a képeket, amelyek maradhatnak a galéria adott pontján.

        A BAL NyílÁVAL jelölje a képeket, amelyek nem maradhatnak a galéria adott pontján.

        Most a Képfelismerés feladat bemutatása következik.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent enc_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával.
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    CodeComponent enc_instructions_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a Képfelismerés feladat bemutatása következik.'
  Routine enc_instructions_3
    TextComponent enc_instructions_2_text_2
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        A 'Hely' nevű alfeladat alatt azt döntse el, a bemutatott kép maradhat-e a galéria adott pontján.
        Ezeket a képeket mindenképp kiállítjuk, itt csak a képek helyéről tud dönteni.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.
    ImageComponent enc_instructions_2_image_2
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key_2
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue_2
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine block_title
    TextComponent block_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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  Routine wait_for_last_scan
    CodeComponent prepare_MR_code
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: A vizsgálatvezető előkészíti a scannert', 'blue', 'on_white')
        cprint('Experimenter: Ready for scanning? Hit SPACE or -> to continue.', 'red')
    TextComponent wait_for_last_scan_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = A vizsgálatvezető előkészíti a szkennert.
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    KeyboardComponent wait_for_last_scan_continue
      allowedKeys = 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599
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  Routine experiment_setup
    CodeComponent screen_setup
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    CodeComponent logging_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import os
        os.system('color')
        from termcolor import colored, cprint
        import colorama
        colorama.init()
        win.mouseVisible = False
        cprint('State: Experiment Setup', 'blue', 'on_white')
        print('Mouse disabled on screen. Keep CMD window active!')
      Begin Routine:
        logging.setDefaultClock(globalClock)
    CodeComponent block_names
      Code Type = Auto->JS
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      Begin Experiment:
        session = expInfo['Session']
        if session == 'OBJ':
            task_name='Képszemle'
            block_name_selection=[0, 76]
            print('Session selected: OBJ')
        elif session == 'LOC':
            task_name='Berendezés'
            block_name_selection=[152,228]
            print('Session selected: LOC')
        else:
            block_name_selection=[0,76]
            print('Invalid Session! Will use OBJ.')
    CodeComponent set_instruction_text
      Code Type = Auto->JS
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      Begin Experiment:
        instruction_text = ''
        if session == 'OBJ':
            instruction_text = "A Galériaberendezés alatt azt döntse el, beválogatja-e a képet a kiállításra.\
                                \n\n\t\tJobb Nyíl - Igen\n\t\tBal Nyíl - Nem\
                                \n-----------------------------------------------------------------------\
                                \nA Képfelismerés allatt azt döntse el, látta-e már pontosan ugyanezt a képet a Galériaberendezés alatt.\
                                \n\n\t\tJobb Nyíl - Új\
                                \n\t\tBal Nyíl - Régi"
        elif session == 'LOC':
            instruction_text = "A Galériaberendezés alatt azt döntse el, maradhat-e a kép a bemutatott helyen.\
                                \n\n\t\tJobb Nyíl - Igen\n\t\tBal Nyíl - Nem\
                                \n-----------------------------------------------------------------------\
                                \nA Helyfelismerés allatt azt döntse el, pontosan ezen a helyen látta-e a képet.\
                                \n\n\t\tJobb Nyíl - Új\n\t\tBal Nyíl - Régi"
    ImageComponent welcome_image
      image = stimuli/terkepesz.png
      pos = (0, -100)
      size = (309,665)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    TextComponent welcome_text
      color = black
      letterHeight = 50
      pos = (0, 350)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = TérKépÉsz Feladatok
      units = pix
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  Routine enc_fx_practice
    CodeComponent name_enc_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képszemle'
        elif TrialType=='LOC':
            block_name='Berendezés'
        else:
            block_name='Block Unknown'
    ImageComponent enc_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key_practice
      allowedKeys = 'b', 'c', 'right', 'left'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [BAL Nyíl - Nem marad]      [JOBB Nyíl - Marad]
      units = norm
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  Routine enc_trial_practice
    ImageComponent enc_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key_practice
      allowedKeys = 'b', 'c', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block_practice
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [BAL Nyíl - Nem marad]      [JOBB Nyíl - Marad]
      units = norm
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  Routine rec_fx_practice
    ImageComponent rec_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key_practice
      allowedKeys = 'b', 'c', 'right', 'left'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [BAL Nyíl - Régi]      [JOBB Nyíl - Új]
      units = norm
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    CodeComponent name_rec_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Képfelismerés'
        elif TrialType=='LOC':
            block_name='Helyfelismerés'
        else:
            block_name='Block Unknown'
  Routine rec_trial_practice
    ImageComponent rec_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key_practice
      allowedKeys = 'b', 'c', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block_practice
      color = black
      letterHeight = 0.06
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [BAL Nyíl - Régi]      [JOBB Nyíl - Új]
      units = norm
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text
  Routine general_instructions
    KeyboardComponent general_instructions_key
      allowedKeys = 'd', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent general_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A gyakorláshoz nyomja le a SPACE-t.
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    TextComponent general_instructions_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $instruction_text
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    CodeComponent exp_info_instructions
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: General instructions...', 'blue', 'on_white')
        cprint('Waiting for participant\'s response (d)', 'yellow')
      End Routine:
        cprint('key pressed: '+ general_instructions_key.keys, 'green')
  Routine wait_for_last_scan_rec
    TextComponent wait_for_last_scan_text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
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      text:
        Szünet...

        A vizsgálatvezető előkészíti a szkennert.
    KeyboardComponent wait_for_last_scan_continue_2
      allowedKeys = 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599
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    CodeComponent prepare_MR_code_2
      Code Type = Auto->JS
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      Begin Routine:
        cprint('On Screen: A vizsgálatvezető előkészíti a scannert', 'blue')
        cprint('Experimenter: Ready for scanning? Hit SPACE or -> to continue.', 'red')
  Routine start_rec_run_2
    CodeComponent run_counter_2
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        run_counter = run_counter + 1
    TextComponent start_enc_run_text_2
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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Flow
  Routine experiment_setup
  Routine general_instructions
  Routine start_practice
  Routine practice_block_start
  LoopInitiator enc_full_practice loopType="TrialHandler"
    Selected rows = $practice_selection
    conditionsFile = stimuli_tables/encoding_full_practice_trials.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170a.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/172a.jpg'), ('CurrentX', -0.390625), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', 0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lure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
    Routine enc_fx_practice
    Routine enc_trial_practice
    Routine enc_practice_feedback
  LoopTerminator enc_full_practice
  Routine recognition_title
  LoopInitiator rec_full_practice loopType="TrialHandler"
    Selected rows = $practice_selection
    conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.078125), ('Ycoordinate_lure1', -0.41666666700000005), ('Xcoordinate_lure2', 0.234375), ('Ycoordina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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/178a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.41666666700000005), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/179c.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.390625), ('Ycoordinate_lure1', -0.13888888900000002), ('Xcoordinate_lure2', -0.234375), ('Ycoordin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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/180a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', -0.078125), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', -0.078125), ('Ycoordinat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
    Routine rec_fx_practice
    Routine rec_trial_practice
    Routine rec_practice_feedback
  LoopTerminator rec_full_practice
  Routine end_practice
